PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop_task
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Routines
  Routine trial
    TextComponent text
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 緑
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    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
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  Routine Description
    TextComponent Description1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        赤色の文字が出たら
        スペースを押してください
  Routine trial1
    TextComponent text_2
      color = blue
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 赤
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  Routine trial2
    TextComponent text_3
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 緑
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  Routine trial3
    TextComponent text_4
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 赤
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
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  Routine trial4
    TextComponent text_5
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 青
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  Routine trial5
    TextComponent text_6
      color = blue
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 緑
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  Routine trial6
    TextComponent text_7
      color = blue
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 青
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  Routine trial7
    TextComponent text_8
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 赤
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  Routine trial8
    TextComponent text_9
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 青
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
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  Routine trial9
    TextComponent text_10
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = 緑
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  Routine Description2
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 終了です
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Flow
  Routine Description
  Routine trial
  Routine trial1
  Routine trial2
  Routine trial3
  Routine trial4
  Routine trial5
  Routine trial6
  Routine trial7
  Routine trial8
  Routine trial9
  Routine Description2
